PsychoPy2experiment version="2024.1.5"
Settings
  Audio latency priority = 1
  Audio lib = pygame
  Data filename = u'data/%s_%s_%s' % (expInfo['UPN-ID'], expName, expInfo['date'])
  Experiment info = {'session_admin': 'xxx', 'UPN-ID': '999'}
  Full-screen window = True
  Monitor = HD-Lab
  Screen = 2
  Show info dlg = False
  Units = height
  Use version = 2024.1.5
  Window size (pixels) = [1920, 1080]
  expName = crea_SPB
  keyboardBackend = ioHub
  logging level = error
  measureFrameRate = False
  runMode = 1
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Routines
  Routine _settings
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    CodeComponent set_things
      Code Type = Py
      Begin Experiment:
        ##  ##  ################################################################  ##  ##
        ## ##                                                                      ## ##
        ## ##                           CREA - BREATHING                           ## ##
        ## ##          AUT/TTCT * HYPEVENTILATION/PACED & NORMAL BREATHING         ## ##
        ## ##             (TTCT-digital on wacomONE (behavioral))                  ## ##
        ## ##                                                                      ## ##
        ## #########################|12/2024|bw (bernhard.weber@uni-graz.at)|CC-BY|## ##
        #print(data.getDateStr(format="%H:%M:%S.%m"))   #local: set/mark start of current run

        ##  enable parallel port for markers  ##
        from psychopy import parallel
        Marker = parallel.ParallelPort(address=0x0DFF8)

        ##  import/load some extra modules/packages  ##
        import csv      #for stim-files
        import random   #for image sub-sample

        win.mouseVisible = True

        cwd = os.getcwd()
        #print(f'{cwd=}')

        ##  Options for DEBUG/RESARCH-mode  ##
        DEBUG = 1   #0=research-mode; 1=debug-mode
        if DEBUG:
            itemDur             = 11
            fixDur              = 0     #option: set time, use fixation
            descCrea_dur        = 2
            AUTitem_dur         = 7
            TTCTitem_dur        = 7

            SPB_loops           = 1     #(SPB) breathing  cycles -> 4=debug
            SPB_loops_1min      = 1     #breathing cycles per minute (at 0.1Hz) for durSPB in [min]


        ###   initial settings | initialize some vars   ###
        ##  vars of IHOH-breathing  ##
        ################################################################################
        ##  shift_x8 = 2.3565  #[s] for x-axis shift cos(x) func: 8s ex- = 2s inhale  ##
        ##  shift_x  = 1.7952  #[s] for x-axis shift cos(x) func: 7s ex- = 3s inhale  ##
        ##  shift_x6 = 1.0472  #[s] for x-axis shift cos(x) func: 6s ex- = 4s inhale  ##
        ##  shift_x  = 0       #[s] for x-axis shift cos(x) func: 5s ex- = 5s inhale  ##
        ################################################################################
        shift_x5_6 = 0.785   ##[s] for x-axis shift cos(x) func: 5.6(+0.2)ex- = 4.0(+0.2)s inhale   ##
        ################################################################################
        durIHOH         = 3                         #orig=3; duration [min] of in-hold-ex-hold
        bcpmIHOH        = 6                         #breathing cycles per minute of IHOH
        durHold         = 0.2                       #200ms pause post in- & exhale
        dur_inhaleIHOH  = 4.0                       #4.0s inhale/IN
        #dur_exhaleIHOH  = dur_inhaleIHOH            #4.8s exhale/OUT
        dur_exhaleIHOH  = 10 - dur_inhaleIHOH - 2*durHold   #x.xs exhale/OUT >> 5.6s
        #print(f'{dur_exhaleIHOH=}')
        shift_x  = shift_x5_6  #[s] for x-axis shift cos(x) func: 6s ex- = 4s inhale  ##

        #bcpm            = 60/(dur_inhaleIHOH+durHold+dur_exhaleIHOH+durHold)
        #print("bcpm:", bcpm)


        ##  setup breathing circle ##
        circle_size     = 480   #(max)size of breathing circle, (orig 500px)
        cosXYshift      = 175   #amlitude/magnitude of cos(t) = circle-variability
        frameExtension  = 40    #add some pixels to circle_size
        res_size        = 150   #size of 'residual breath(-volume)circle
        inhale_color    = [ 1.0000, 0.4275, 0.5137]    #breathing bar color -> inhale JMT neu
        exhale_color    = [0.0588, 0.6157, 0.9608]    #breathing bar color -> exhale JMT_neu
        circle_color    = 'black'


        ##  NO DEBUG MODE = test mode  ##
        if not DEBUG:
            itemDur             = 180
            fixDur              = 0     #option: set time, use fixation
            AUTitem_dur         = 60
            TTCTitem_dur        = 60
            descCrea_dur        = 10    #10s instruction/description of crea tasks

            SPB_loops           = bcpmIHOH * durIHOH   #n of SPB loop repetitions; breathing cycles per minute (at 0.1Hz) for durSPB in [min]
            SPB_loops_1min      = bcpmIHOH             #breathing cycles for one minute
        #print(f'{SPB_loops=}')


        ##  import/load some extra modules/packages  ##
        import shutil           #copy & Co
        import wx               #screendimensions
        from PIL import ImageGrab

        app = wx.App(False)
        sizeX = wx.GetDisplaySize()[0]
        sizeY = wx.GetDisplaySize()[1]

        imX = 450   #image.size[0]  #size x of stim
        imY = 450   #image.size[1]  #size y of stim


        ##  Options for ONSCREEN-KEYBOARD (touchscreen WACOM ONE)  ##
        ONSCREENKEYBOARD = 1   #0=NO onscreen keyboard; 1=ONSCREEN-KEYBOARD with touchscreen WACOM ONE
        if ONSCREENKEYBOARD:
            header_pos_y = .40
            main_pos_y   = .225
            main_pos_y_px= 270
            btn_pos_y    = .05
            hint_pos_y   = 0
            y_offset     = sizeY/4
        else:
            header_pos_y = .40
            main_pos_y   = 0
            main_pos_y_px= 0
            btn_pos_y    = -.25
            hint_pos_y   = -.45
            y_offset     = 0


        ##  search for window-handles by only a partial name  ##
        import win32gui
        import win32gui_struct

        def find_window_with_partial_name(partial_name):
            top_windows = []

            def _enum_windows_callback(hwnd, extra):
                nonlocal top_windows
                name = win32gui.GetWindowText(hwnd)
                if partial_name in name:
                    top_windows.append((hwnd, name))

            win32gui_enumwindows_func = win32gui.EnumWindows
            win32gui_enumwindows_func(_enum_windows_callback, None)

            for hwnd, name in top_windows:
                if win32gui.IsWindowVisible(hwnd):
                    return hwnd

            return None

        """
        # Example usage
        partial_window_name = "PartialName"
        window_handle = find_window_with_partial_name(partial_window_name)
        if window_handle:
            print(f"Window with partial name '{partial_window_name}' found, handle: {window_handle}")
        else:
            print(f"No window with partial name '{partial_window_name}' found")
        """


         ## ### # ###  # ## #  ## # ### ##
        ##  monsieur claude and it's ai  ##
        ###  ### ## # ### #  ##  ### # ##

        ##  Function to read stimulus names from CSV file
        def read_stimuli_from_csv(filename, column_name='stimulus'):
            stimuli_from_file = []
            with open(filename, 'r', encoding='utf-8') as file:
                csv_reader = csv.DictReader(file)
                for row in csv_reader:
                    stimuli_from_file.append(row[column_name])
            return stimuli_from_file


        ##  Function to create visual items: stimuli-names & prefixes, images, positions, sizes
        def create_items(stimuli_names, positions, prefix):
            items = []
            for stim_img, pos, i in zip(stimuli_names, positions, range(items2present)):
                item = visual.ImageStim(win, name=f'{prefix}_{i}', image=stim_img, pos=pos, size=(x_dim, y_dim))
                items.append(item)
            return items


        ##  Function to write a list to a .txt file
        def write_list_to_txt(filename, my_list):
            """
            Write a list to a text file, with each item on a new line.

            :param filename: Name of the text file to write to
            :param my_list: List of items to write
            """
            with open(filename, 'w') as file:
                for item in my_list:
                    file.write(f"{item}\n")


        ##  Function to read a list from a .txt file
        def read_list_from_txt(filename):
            """
            Read a list from a text file, removing newline characters.

            :param filename: Name of the text file to read from
            :return: List of items read from the file
            """
            with open(filename, 'r') as file:
                return [line.strip() for line in file]
      Begin Routine:
        ##  marker: SPB START  ##
        Marker.setData(209); core.wait(0.1); Marker.setData(0)

        ##  define some vars
        selected_actions_list = []          #mouse-click-selected actions
        selected_actionPictures_list = []   #image-names of selected actions
        selected_actions = 0                #selection counter

        actions_end_waiting = False         #wait to end time after last selection click

        """
        ##  select (n) AUT-items for each block
        shuffle(AUT_items)          #aller guten
        shuffle(AUT_items)          #Dinge sind
        shuffle(AUT_items)          #drei(mal)
        #AUTitems_block1 = random.sample(AUT_items, 4)           #items_block1 ... natural breathing
        AUTitems_block1 = AUT_items[:4]                 #items_block1 ... natural breathing
        print(f'{AUTitems_block1=}')
        #AUTitems_block2 = random.sample(AUT_items, 4)           #items_block2 ... hyperventialation/SPB
        AUTitems_block2 = AUT_items[4:8]                #items_block2 ... hyperventialation/SPB
        print(f'{AUTitems_block2=}')
        #AUTitems_block3 = random.sample(AUT_items, 4)           #items_block3 ... SPB/hyperventialation
        AUTitems_block3 = AUT_items[-4:]                 #items_block3 ... SPB/hyperventialation
        print(f'{AUTitems_block3=}')
        """

        """
        ##  write the lists to files
        #log_dir     = cwd + "//idea_log//" + expInfo['UPN-ID']
        filename1 = f'{cwd}//stim//subj_AUTlists//{participant_ID}_AUTitems_block1.txt'
        print(f'{filename1=}')
        write_list_to_txt(filename1, AUTitems_block1)
        write_list_to_txt(f'{cwd}//stim//subj_AUTlists//{participant_ID}_AUTitems_block2.txt', AUTitems_block2)
        write_list_to_txt(f'{cwd}//stim//subj_AUTlists//{participant_ID}_AUTitems_block3.txt', AUTitems_block3)
        """


        ##  read (a) certain AUT list(s) from file(s)
        try:
            AUTitems_block1 = read_list_from_txt(f'{cwd}//stim//subj_AUTlists//{participant_ID}_AUTitems_block1.txt')
            #print(f'{AUTitems_block1=}')
            AUTitems_block2 = read_list_from_txt(f'{cwd}//stim//subj_AUTlists//{participant_ID}_AUTitems_block2.txt')
            #print(f'{AUTitems_block2=}')
            AUTitems_block3 = read_list_from_txt(f'{cwd}//stim//subj_AUTlists//{participant_ID}_AUTitems_block3.txt')
            #print(f'{AUTitems_block3=}')
        except:
            #print(f'{expInfo["session_admin"]=}')
            #print(f'{cwd}//stim//subj_AUTlists//{expInfo["session_admin"]}_{participant_ID}_AUTitems_block1.txt')
            AUTitems_block1 = read_list_from_txt(f'{cwd}'+os.sep+'stim'+os.sep+'subj_AUTlists'+os.sep+f'{expInfo["session_admin"]}_{participant_ID}_AUTitems_block1.txt')
            AUTitems_block2 = read_list_from_txt(f'{cwd}'+os.sep+'stim'+os.sep+'subj_AUTlists'+os.sep+f'{expInfo["session_admin"]}_{participant_ID}_AUTitems_block2.txt')
            AUTitems_block3 = read_list_from_txt(f'{cwd}'+os.sep+'stim'+os.sep+'subj_AUTlists'+os.sep+f'{expInfo["session_admin"]}_{participant_ID}_AUTitems_block3.txt')


        ##  read (a) certain TTCT list(s) from file(s)
        try:
            TTCTitems_block1 = read_list_from_txt(f'{cwd}//stim//subj_TTCTlists//{participant_ID}_TTCTitems_block1.txt')
            #print(f'{TTCTitems_block1=}')
            TTCTitems_block2 = read_list_from_txt(f'{cwd}//stim//subj_TTCTlists//{participant_ID}_TTCTitems_block2.txt')
            #print(f'{TTCTitems_block2=}')
            TTCTitems_block3 = read_list_from_txt(f'{cwd}//stim//subj_TTCTlists//{participant_ID}_TTCTitems_block3.txt')
            #print(f'{TTCTitems_block3=}')
        except:
            TTCTitems_block1 = read_list_from_txt(f'{cwd}'+os.sep+'stim'+os.sep+'subj_TTCTlists'+os.sep+f'{expInfo["session_admin"]}_{participant_ID}_TTCTitems_block1.txt')
            TTCTitems_block2 = read_list_from_txt(f'{cwd}'+os.sep+'stim'+os.sep+'subj_TTCTlists'+os.sep+f'{expInfo["session_admin"]}_{participant_ID}_TTCTitems_block2.txt')
            TTCTitems_block3 = read_list_from_txt(f'{cwd}'+os.sep+'stim'+os.sep+'subj_TTCTlists'+os.sep+f'{expInfo["session_admin"]}_{participant_ID}_TTCTitems_block3.txt')
      End Experiment:
        ##  marker: SPB STOP  ##
        Marker.setData(211); core.wait(0.1); Marker.setData(0)
  Routine thx
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    TextComponent thx_txt
      durationEstim = 5
      letterHeight = 0.035
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Vielen Dank,

        dieser Teil der Untersuchung ist zu Ende.
    KeyboardComponent thx_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent thx_hint
      color = $[-0.25,-0.25,-0.25]
      letterHeight = 0.025
      pos = (.25, btn_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Beenden mit Enter
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  Routine p_start
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    TextComponent p_start_txt
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Es folgt ein Übungsbeispiel
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    KeyboardComponent p_start_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent p_hint
      color = darkgreen
      letterHeight = 0.025
      pos = (0, -.45)
      startVal [time (s)] = 0.0
      text = Weiter mit Leertaste
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  Routine p_item
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    ParallelOutComponent p_mrk
      address = 0x0378
      register = EIO
      startData = 20
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent p_img
      disabled = True
      image = stim/Items/Fenster_Pic.JPG
      size = (1.33,1)
      startVal [time (s)] = 0.0
      stopVal [condition] = p_audio.status==FINISHED
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  Routine p_idea
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    CodeComponent p_code
      Code Type = Py
      disabled = True
      Begin Experiment:
        ##  initialize this routine ONCE  ##
        p_once = False
      Begin Routine:
        ## ### audio-recording ###
        #p_mic.reset()
        #p_mic.record(p_recDur, filename=wavDirName + '\\' + rec_name, block=False)

        p_finish = False
        p_recStart = False
        p_recProgress = False

        #print("once: {}".format(p_once))
        if not p_once:
            p_once = True

            ##check for "leftover" responses and clear them
            old_resp = event.getKeys() # get a list of keys pressed at this instant
            if old_resp:
                old_respKey = old_resp.pop()
                #print("old_respKey: {}".format(old_respKey))
            #else: print('no old resps found')

            p_recDur = recDur   #3 #duration for audio recordings

            p_tme = core.Clock(); p_tme.addTime(p_loopDur)
            #print("p_tme.getTime(): {}".format(p_tme.getTime()))

            p_cdTimer = core.CountdownTimer(p_loopDur)
            #print("cdTimer.getTime(): {}".format(p_cdTimer.getTime())); print('')

            p_startTime = core.getTime()
            #print("startTime: {}".format(p_startTime))

        #print("once: {}".format(p_once))
      Each Frame:
        ## ### check the loop-time ###
        if core.getTime() > p_startTime + p_loopDur:
            #print(p_startTime + p_loopDur)
            p_finish = True
            #print("p_finish = 1")
            continueRoutine = False # finish p_trial

        ## ### check for keypresses ###
        p_response = event.getKeys() # get a list of keys pressed at this instant

        if p_response:

            if 'escape' in p_response:
                continueRoutine = False

            p_respKey = p_response.pop()
            #print("respKey: %s" %(respKey))

            if p_respKey == 'space' and not p_recStart:
                p_recStart = True

            elif p_respKey == 'space' and p_recProgress:
                #print("   audio-rec: keypress-STOP %.2f" %(core.getTime()))
                p_FZ.color = 'white'
                p_recStart = False
                p_recProgress = False
                #p_mic.stop()
                continueRoutine = False # stop audio rec, finish this trial

        if p_recStart and not p_recProgress:
            p_recProgress = True
            p_FZ.color = 'darkgreen'
            p_start_rec = core.getTime()
            #print("   audio-rec: START %.2f" %(p_start_rec))
            #p_mic.record(recDur, 'p_audio_' + str(p_idea_loop.thisN+1), block=False)

        elif p_recStart and core.getTime() > p_start_rec + p_recDur:
            #p_mic.stop()
            #print("audio-rec: TIME-stop, loop exit %.2f" %(core.getTime()))
            p_FZ.color = 'white'
            p_recStart = False
            p_recProgress = False
            continueRoutine = False # finish this trial
      End Routine:
        ##finally exit the p_idea_loop
        if p_finish == 1:
            #print("p_idea_loop exit")
            p_idea_loop.finished = True
    TextComponent p_FZ
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $itemDur
      text = ?
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    SoundComponent p_idea_end
      sound [set every repeat] = stim/DING.ogg
      startVal [time (s)] = $itemDur
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  Routine start
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    TextComponent start_txt
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Alles klar?

        Es beginnt nun die eigentliche Aufgabe
    KeyboardComponent start_key
      allowedKeys = 'return', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent start_hint
      color = darkgreen
      letterHeight = 0.025
      pos = (0, -.45)
      startVal [time (s)] = 0.0
      text = Weiter mit Leertaste
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  Routine t_AUTanswer
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    CodeComponent AUTanswer_code
      Code Type = Py
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      Begin Routine:
        ##  marker: AUTanwer START  ##
        Marker.setData(93); core.wait(0.1); Marker.setData(0)
      End Routine:
        ##  marker: AUTanswer STOP  ##
        Marker.setData(95); core.wait(0.1); Marker.setData(0)
    TextComponent ans_prompt
      color = black
      letterHeight = 0.045
      pos = (0, header_pos_y)
      startVal [time (s)] = 0
      wrapWidth = 1
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      text:
        Bitte tippen Sie hier Ihre (beste) Antwort ein:
    TextboxComponent AUTanswer_box
      bold = False
      borderColor = grey
      color = green
      editable = True
      fillColor = lightgrey
      letterHeight = 0.04
      overflow = hidden
      pos = (0, main_pos_y)
      size = (0.75, 0.09)
      startVal [time (s)] = 0.0
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    PolygonComponent go_on_btn
      fillColor = white
      lineColor = darkgrey
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.125, 0.0475)
      startVal [time (s)] = 0.0
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    TextComponent go_on_txt
      color = black
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent go_on_mse
      clickable = go_on_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = AUTanswer_box.getText() != ""
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    TextComponent ans_hint
      color = darkgreen
      disabled = True
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text = Bestätigen/Beenden der Eingabe mit Return-/Enter-Taste
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  Routine AUTtrial
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    CodeComponent AUT_code
      Code Type = Py
      Begin Experiment:
        presented_AUTitems = 0
      Begin Routine:
        ##  marker: AUTtrials START  ##
        Marker.setData(91); core.wait(0.1); Marker.setData(0)

        #AUTitem = AUTitems_block1[presented_AUTitems]               #standard/normal breathing (block 1)
        #AUTitem_hyperv = AUTitems_block2[presented_AUTitems]        #hyperventilation (block 2)
        AUTitem_spb = AUTitems_block3[presented_AUTitems]           #slow paced breathing (block3)
        #print(f'{AUTitem_spb=}')
        AUT_trials.addData('AUTitem_spb', AUTitem_spb)  #’trials’=current loop
      End Routine:
        presented_AUTitems += 1
        #print(f'{presented_AUTitems=}')
    TextComponent AUT_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    ParallelOutComponent AUT_mrk
      address = 0x0378
      register = EIO
      startData = 23
      startVal [condition] = AUT_fix.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent AUT_item
      color = blue
      letterHeight = 0.05
      pos = (0, main_pos_y)
      startVal [condition] = AUT_fix.status==FINISHED
      stopVal [duration (s)] = $AUTitem_dur
      text [set every repeat] = $AUTitem_spb
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    KeyboardComponent AUT_idea_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $AUTitem_dur
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    PolygonComponent AUT_idea_btn
      fillColor = white
      lineColor = darkgrey
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.125, 0.0475)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $AUTitem_dur
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    TextComponent AUT_idea_txt
      color = black
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $AUTitem_dur
      text = Idee!
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    MouseComponent AUT_idea_mse
      clickable = AUT_idea_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $AUTitem_dur
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    TextComponent AUT_idea_hint
      color = darkgreen
      disabled = True
      letterHeight = 0.025
      pos = (0, hint_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $AUTitem_dur
      text = Bei Idee: Weiter mit MAUS (Klick auf 'Idee!') oder SPACE-/LEERTASTE
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  Routine free_breathing
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    CodeComponent call_free_breathing
      Code Type = Py
  Routine b2TTCTonline
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    CodeComponent b2_TTCT_code
      Code Type = Py
      Begin Experiment:
        ## -------------------------------------------------------------------------- ##
        ##                          FOR BROWSER INTERACTION                           ##
        ## -------------------------------------------------------------------------- ##
        from selenium import webdriver
        #from selenium.webdriver.common.keys import Keys
        from selenium.webdriver.common.action_chains import ActionChains

        from selenium.webdriver.chrome.options import Options   #>>disable "search-engine-choice" (07/2024)

        ##  claude script imports  ##
        #from selenium.webdriver.common.by import By
        from selenium.webdriver.support.ui import WebDriverWait
        from selenium.webdriver.support import expected_conditions as EC
        from selenium.common.exceptions import TimeoutException, NoAlertPresentException

        import win32gui
        import win32con

        ##  set/define some important variables
        presented_TTCTitems = 0
        #study_ID = '9999'              #default
        study_ID = '1417'               #!set fixed! study_id > 'Angerbauer' (2024/25) = study_ID = '1417'
        #study_ID = expInfo['study-ID']  #study_id 'Angerbauer' (2024/25)
        #participant_ID = '747'
        participant_ID = expInfo['UPN-ID']


        ##  ###   detect all the 'important' windows   ###  ##
        #if window_handle:
        #    print(f"Window with partial name '{partial_window_name}' found, handle: {window_handle}")
        #else:
        #    print(f"No window with partial name '{partial_window_name}' found")

        PsychoPyBuilderWin = find_window_with_partial_name("Builder")
        win32gui.ShowWindow(PsychoPyBuilderWin, win32con.SW_MINIMIZE)
        PsychoPyRunnerWin = find_window_with_partial_name("Runner")
        runParadigmaWindow = win32gui.FindWindow(None,"PsychoPy")

        ##  Initialize browser and other variables
        browser = None


        ##  Loading the webdriver by using the add-on "chromedriver.exe" in the root directory
        chrome_options = Options()                                              #>>disable "search-engine-choice" (07/2024)
        chrome_options.add_argument("--disable-search-engine-choice-screen")    #>>disable "search-engine-choice" (07/2024)
        browser = webdriver.Chrome(options=chrome_options)                      #chromedriver


        ##  def wait_for_alert_and_close(browser, timeout=60)  ##
        # def wait_for_alert_and_close(browser, timeout=TTCTitem_dur):
        def wait_for_alert_and_close(browser, timeout=60):
            #Wait for alert to be present and then close browser when user clicks OK
            # :param driver: Selenium WebDriver instance
            # :param timeout: Maximum wait time for alert in seconds
            try:
                # ## Wait for alert to be present
                alert = WebDriverWait(browser, timeout).until(EC.alert_is_present())

                # ## Get alert text
                alert_text = alert.text
                #print(f"Alert text: {alert_text}")

                # ## Pause and wait for user to manually click OK
                #print("ALERT DETECTED: Please click OK on the alert.")
                #print("The script will wait for you to interact with the alert.")

                # ## Wait until alert is no longer present (indicating user clicked OK)
                WebDriverWait(browser, timeout).until_not(EC.alert_is_present())
                #print("TTCT item - done!")

            except NoAlertPresentException:
                print("No alert found.")
            except TimeoutException:
                print(f"No alert appeared or was not handled within {timeout} seconds.")
            finally:
                win32gui.ShowWindow(runParadigmaWindow, win32con.SW_MAXIMIZE)           #maximize "running paradigma"(-PsychoPy) window
                # ## minimize the browser window
                browser.minimize_window()                                               #minimize the browser window
                # ## Close and quit the browser
                #print("browser.close()")
                #browser.close()
                #print("browser.quit()")
                #browser.quit()

        """
        ##  def wait_for_user_ok_click(browser, timeout=None)  ##
        def wait_for_user_ok_click(browser, timeout=None):
        """
        #    Wait for the user to click OK on the 'Was hast du gezeichnet?' dialog
        #
        #    Args:
        #        browser: Selenium WebDriver instance
        #        timeout: Optional timeout duration
        #
        #    Returns:
        #        bool: True if OK was clicked, False if timeout occurred
        """
            #print(f'übergebenes {timeout=}')

            try:
                # Check for the specific alert
                alert = browser.switch_to.alert
                print('f{alert=}')

                # Verify the alert text
                if "Was hast du gezeichnet?" not in alert.text:
                    print("try to verify the alert text")
                    return False

                # If no timeout specified, wait indefinitely
                if timeout is None:
                    while True:
                        try:
                            # Continuously check if alert is still present
                            alert.text
                            time.sleep(0.5)
                        except NoAlertPresentException:
                            # Alert closed (OK clicked)
                            print("OK button clicked by user")
                            return True
                else:
                    # Wait with a specific timeout
                    print("Wait the specific timeout")
                    #core.wait(1)
                    start_time = time.time()
                    while time.time() - start_time < timeout:
                        try:
                            alert.text
                            time.sleep(0.5)
                        except NoAlertPresentException:
                            print("OK button clicked by user")
                            timeout = 0
                            #core.wait(1)
                            return True

                    print("Timeout waiting for OK click")
                    return False

            except NoAlertPresentException:
                print("No alert present")
                #core.wait(1)
                return False
        """


        """
        ##  Catching the python window for later control
        runParadigmaWindow = win32gui.GetForegroundWindow()
        print(f'{runParadigmaWindow=}')

        ##  Detect 'PsychPy Builder' Window
        PsychoPyRunnerWin = win32gui.FindWindow(None, "PsychoPy Runner (v2024.1.5)")
        #win32gui.ShowWindow(PsychoPyRunner_Win, win32con.SW_MINIMIZE)

        PsychoPyWin = win32gui.FindWindow(None,"PsychoPy")
        #win32gui.ShowWindow(PsychoPy_Win, win32con.SW_MINIMIZE)
        """
      Begin Routine:
        ##  marker: TTCT START  ##
        Marker.setData(101); core.wait(0.1); Marker.setData(0)

        ##  select current TTCTitem
        TTCTitem_presented = False      #flag for 'wait'-routine
        #TTCTitem = TTCTitems_block1[presented_TTCTitems]               #standard/normal breathing (block 1)
        #TTCTitem_hyperv = TTCTitems_block2[presented_TTCTitems]        #hyperventilation (block 2)
        TTCTitem_spb = TTCTitems_block3[presented_TTCTitems]           #slow paced breathing (block3)
        #print(f'{TTCTitem_spb=}')
        TTCT_trials.addData('TTCTitem_spb', TTCTitem_spb)  #’trials’=current loop

        ##  handle (some) windows
        win32gui.ShowWindow(runParadigmaWindow, win32con.SW_MINIMIZE)       #Minimize "running paradigma"(-PsychoPy) window

        #https://webpsy2.uni-graz.at/ges1www/crea_draw/?studyId=999&participantId=77
        #url = f"https://webpsy2.uni-graz.at/ges1www/crea_draw/?studyId={study_ID}&participantId={participant_ID}"
        url = f"https://webpsy2.uni-graz.at/ges1www/crea_draw/?studyId={study_ID}_{TTCTitem_spb}&participantId={participant_ID}"

        ## >>> moved >>> to >>> 'each frame' >>>
        """
        try:
            #print("browser.get(url)")
            browser.get(url)                            #Navigate to website
            browser.maximize_window()                   #Maximize the browser window

            # ##Wait for alert and handle browser closure
            wait_for_alert_and_close(browser)                           #no specific 'time-out'-param (default = 60s)
            #wait_for_alert_and_close(browser, timeout=TTCTitem_dur):    #set a 'time-out'-param (timeout=TTCTitem_dur)
            #wait_for_alert_and_close(browser, 5)    #set a 'time-out'-param

        except Exception as e:
            print(f"An error occurred: {e}")
            #browser.quit()
        """

        #core.wait(.5)
      Each Frame:
        try:
            #print("browser.get(url)")
            browser.get(url)                            #Navigate to website
            browser.maximize_window()                   #Maximize the browser window

            # ##Wait for alert and handle browser closure
            wait_for_alert_and_close(browser)                           #no specific 'time-out'-param (default = 60s)
            #wait_for_alert_and_close(browser, timeout=TTCTitem_dur):    #set a 'time-out'-param (timeout=TTCTitem_dur)
            #wait_for_alert_and_close(browser, 5)    #set a 'time-out'-param

        except Exception as e:
            print(f"An error occurred: {e}")
            #browser.quit()
      End Experiment:
        ##  Maximize 'PsychoPy-Builder' Window
        #win32gui.ShowWindow(PsychoPyBuilderWin, win32con.SW_MAXIMIZE)
        #core.wait(0.1)
      End Routine:
        ##  marker: TTCT STOP  ##
        Marker.setData(103); core.wait(0.1); Marker.setData(0)

        presented_TTCTitems += 1
        #print(f'{presented_TTCTitems=}')
        TTCTitem_presented = True

        ##  maximize >runParadigma<-window
        win32gui.ShowWindow(runParadigmaWindow, win32con.SW_MAXIMIZE)           #maximize "running paradigma"(-PsychoPy) window

        ##  Close the browser window and wait
        #browser.quit()
        core.wait(0.1)

        """
        ##  maximize >runParadigma<-window
        win32gui.ShowWindow(runParadigmaWindow, win32con.SW_MAXIMIZE)           #maximize "running paradigma"(-PsychoPy) window
        """
  Routine NB_1min
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    TextComponent NB1min_txt
      color = black
      durationEstim = 60
      letterHeight = 0.035
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $crea_breathing_dur
      text = ...einfach ganz normal weiteratmen...
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    TextComponent NB1m_countdown
      color = blue
      letterHeight = 0.075
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $crea_breathing_dur
      text [set every frame] = $str(crea_breathing_dur-int(t))
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  Routine AUT_info
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    CodeComponent AUT_info_code
      Code Type = Py
      Begin Routine:
        print(" ")
        print(f'{crea_blocks=}')
        print(f'{crea_blocks.trialList=}')
        print(f'{crea_blocks.trialList[0]=}')
        print(f'{AUT_run=} | {TTCT_run=}');
        print(" ")
  Routine descCreaTasks
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    CodeComponent crea_tasks_code
      Code Type = Py
      Begin Routine:
        crea_tasks_txt.alignText = 'left'
    TextComponent crea_tasks_header
      color = black
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $descCrea_dur
      text = Beschreibung der Kreativitäts-Tasks (AUT und TTCT)
      wrapWidth = 1.25
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    TextComponent crea_tasks_txt
      color = black
      letterHeight = 0.0325
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $descCrea_dur
      wrapWidth = 1.25
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      text:
        AUT = Worte von Alltagsgegenständen werden am Bildschirm gezeigt (z.B. "Buch", "Schirm", "Ziegelstein"). Nenne innerhalb von 60 Sekunden die originellste Verwendung, die dir für diesen Gegenstand einfällt!

        TTCT = Verschiedene Formen und unvollständige Figuren werden jeweils 60 Sekunden lang gezeigt. Bitte vervollständige dieses Bildfragment möglichst kreativ!
    KeyboardComponent crea_tasks_key
      allowedKeys = 'return','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $descCrea_dur
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    PolygonComponent crea_tasks_btn
      fillColor = lightgrey
      lineColor = black
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $descCrea_dur
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    TextComponent crea_tasks_hint
      color = darkgreen
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $descCrea_dur
      text = Weiter
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    MouseComponent crea_tasks_mse
      clickable = crea_tasks_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $descCrea_dur
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  Routine main_ins1
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    CodeComponent m_ins_code_1
      Code Type = Py
      Begin Routine:
        m_ins_txt_1.alignText = 'left'
    TextComponent m_ins_header_1
      color = black
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Herzlich Willkommen zur Studie „Atme dich kreativ!“
      wrapWidth = 1.25
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    TextComponent m_ins_txt_1
      color = black
      letterHeight = 0.0325
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Vielen Dank für Deine Bereitschaft, an dieser Untersuchung teilzunehmen. In dieser Studie untersuchen wir den Zusammenhang zwischen Alltagskreativität und der Herzratenvariabilität.

        Die Studie besteht aus insgesamt drei Blöcken zu je 20 Minuten. Zwischen den Blöcken gibt es jeweils eine 10-minütige Pause, in welcher zur Entspannung Naturbilder präsentiert werden. Pro Block wird 4-mal der Test zur verbalen und 4-mal der Test zur figuralen Kreativität vorgegeben.
    KeyboardComponent m_ins_key_1
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent m_ins_btn_1
      fillColor = lightgrey
      lineColor = black
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent m_ins_hint_1
      color = darkgreen
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent m_ins_mse_1
      clickable = m_ins_btn_1
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine main_ins2
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    CodeComponent m_ins_code_2
      Code Type = Py
      Begin Routine:
        m_ins_txt_2.alignText = 'left'
    TextComponent m_ins_header_2
      color = black
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Herzlich Willkommen zur Studie „Atme dich kreativ!“
      wrapWidth = 1.25
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    TextComponent m_ins_txt_2
      color = black
      letterHeight = 0.0325
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        In Block 1 wird noch keine Atemgeschwindigkeit vorgegeben, in Block 2 und 3 werden jene Atemgeschwindigkeiten anhand eines Atemkreises vorgegeben, welche du bereits aus den Übungsvideos kennst.

        Wichtig: WÄHREND der Kreativitätstests atmest du in der Geschwindigkeit, DIE FÜR DICH PASSEND IST. Zwischen den Tests gibt es jeweils eine 1-minütige „Atemauffrischung“, in welcher wieder in der für den Block relevanten Geschwindigkeit geatmet wird.
    KeyboardComponent m_ins_key_2
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent m_ins_btn_2
      fillColor = lightgrey
      lineColor = black
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent m_ins_hint_2
      color = darkgreen
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent m_ins_mse_2
      clickable = m_ins_btn_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine main_ins3
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    CodeComponent m_ins_code_3
      Code Type = Py
      Begin Routine:
        m_ins_txt_3.alignText = 'left'
    TextComponent m_ins_header_3
      color = black
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Herzlich Willkommen zur Studie „Atme dich kreativ!“
      wrapWidth = 1.25
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    TextComponent m_ins_txt_3
      color = black
      letterHeight = 0.0325
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Wichtig: WÄHREND der Kreativitätstests atmest du in der Geschwindigkeit, DIE FÜR DICH PASSEND IST. Zwischen den Tests gibt es jeweils eine 1-minütige „Atemauffrischung“, in welcher wieder in der für den Block relevanten Geschwindigkeit geatmet wird.

        Es wird jeder Schritt im Laufe der Untersuchung noch einmal kurz erklärt. Falls es jetzt schon Fragen gibt, beantworte ich sie dir sehr gerne. Falls es keine Fragen gibt, drücke auf „Weiter“, um die Untersuchung zu starten.
    KeyboardComponent m_ins_key_3
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent m_ins_btn_3
      fillColor = lightgrey
      lineColor = black
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent m_ins_hint_3
      color = darkgreen
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent m_ins_mse_3
      clickable = m_ins_btn_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine main_ins
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    CodeComponent m_ins_code
      Code Type = Py
      Begin Routine:
        m_ins_txt.alignText = 'left'
    TextComponent m_ins_header
      color = black
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Herzlich Willkommen zur Studie „Atme dich kreativ!“
      wrapWidth = 1.25
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    TextComponent m_ins_txt
      color = black
      letterHeight = 0.0325
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Vielen Dank für Deine Bereitschaft, an dieser Untersuchung teilzunehmen. In dieser Studie untersuchen wir den Zusammenhang zwischen Alltagskreativität und der Herzratenvariabilität.

        Die Studie besteht aus insgesamt drei Blöcken zu je 20 Minuten. Zwischen den Blöcken gibt es jeweils eine 10-minütige Pause, in welcher zur Entspannung Naturbilder präsentiert werden. Pro Block wird 4-mal der Test zur verbalen und 4-mal der Test zur figuralen Kreativität vorgegeben.

        In Block 1 wird noch keine Atemgeschwindigkeit vorgegeben, in Block 2 und 3 werden jene Atemgeschwindigkeiten anhand eines Atemkreises vorgegeben, welche du bereits aus den Übungsvideos kennst.

        Wichtig: WÄHREND der Kreativitätstests atmest du in der Geschwindigkeit, DIE FÜR DICH PASSEND IST. Zwischen den Tests gibt es jeweils eine 1-minütige „Atemauffrischung“, in welcher wieder in der für den Block relevanten Geschwindigkeit geatmet wird.

        Es wird jeder Schritt im Laufe der Untersuchung noch einmal kurz erklärt. Falls es jetzt schon Fragen gibt, beantworte ich sie dir sehr gerne. Falls es keine Fragen gibt, drücke auf „Weiter“, um die Untersuchung zu starten.
    KeyboardComponent m_ins_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent m_ins_btn
      fillColor = lightgrey
      lineColor = black
      pos = (0, -.45)
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent m_ins_hint
      color = darkgreen
      letterHeight = 0.025
      pos = (0, -.45)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent m_ins_mse
      clickable = m_ins_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine crea_items_count
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    CodeComponent cic_code
      Code Type = Py
      Begin Experiment:
        go_NB1min = 1
      Begin Routine:
        if crea_blocks.thisN < 7:
            go_SPB1min = 1
        else:
            go_SPB1min = 0
  Routine SPB_ins
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    CodeComponent spb_ins_code
      Code Type = Py
      Begin Routine:
        spb_ins_txt.alignText = 'center'
    TextComponent spb_ins_header
      color = black
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = (langsame) Pendelatmung
      wrapWidth = 1
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    TextComponent spb_ins_txt
      color = black
      letterHeight = 0.0325
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Im nächsten Block folgt die langsame Atembedingung.
        Atme nun bitte in der mit dem Atemkreis vorgegebenen Frequenz.

        Wenn du bereit bist > "Weiter"
    KeyboardComponent spb_ins_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent spb_ins_btn
      fillColor = lightgrey
      lineColor = black
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent spb_ins_hint
      color = darkgreen
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent spb_ins_mse
      clickable = spb_ins_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine go4spb
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    CodeComponent go4SPB_code
      Code Type = Py
      End Routine:
        ##  marker: SPB 3min START  ##
        Marker.setData(41); core.wait(0.1); Marker.setData(0)
    TextComponent go4it_txt
      color = black
      letterHeight = 0.035
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = ...es beginnen die langsamen Atemzüge...
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  Routine SPB
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    CodeComponent SPBcode
      Code Type = Py
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      Begin Experiment:
        ##  respiration timer  ##
        respClock = core.Clock()
      Begin Routine:
        win.mouseVisible = False

        c_resp_txt.alignText = 'center'

        ##  > 'Einatmen'
        resp_txt = 'Einatmen'
        b_txt_size = 0.035

        circle_color = inhale_color         #(re)set color of breathing bar

        respTime = 0
        respClock.reset()

        exhale = False

        SPBonce = False
        #print("current HV-loop:", (HV_loop.thisN, HV_loops, HV_loop.thisTrialN))

        tonce = False
      Each Frame:
        ##  get current (respiration-animation) time  ##
        respTime = respClock.getTime()

        # # # respiration text: basic-size = 0.035  ##
        # # #    '/50' > flatten the (cos-)curve; +1/50 > offset to start x=0|y=0
        # # # b_txt_size = 0.035 -cos(pi*respTime/(dur_inhaleIHOH+durHold))/50 +1/50 #

        ##  > 'Einatmen' (inhale)
        #  respiration circle: res(idual)-size = 200px  ##
        #    '+|- '150' > variability of circle size

        #circ_dia = res_size -cosXYshift*cos(pi*respTime/(dur_inhaleIHOH+durHold)) + cosXYshift
        circ_dia = res_size -cosXYshift*cos(pi*respTime/(dur_inhaleIHOH)) + cosXYshift


        ##  > hold
        if respTime > dur_inhaleIHOH: resp_txt = ' '

        ##  > 'Ausatmen' (exhale)
        if respTime >= (dur_inhaleIHOH+durHold):
        #if not exhale and respTime >= (dur_inhaleIHOH+durHold) and SPB_loop.thisN+1 < SPB_loops:
            exhale = True
            #print("EXHALE - current info HV_loop.thisN, HV_loops:", (HV_loop.thisN, HV_loops))
            #   #another (slower/faster) x-shifted (=move left/right) "cos()"-function
            #circ_dia = res_size -cosXYshift*cos(pi*respTime/(dur_exhaleIHOH+durHold) + shift_x) + cosXYshift
            circ_dia = res_size -cosXYshift*cos(pi*respTime/dur_exhaleIHOH + shift_x) + cosXYshift

            circle_color = exhale_color
            resp_txt = 'Ausatmen'

        ##  > hold
        if respTime >= (dur_inhaleIHOH+durHold+dur_exhaleIHOH): resp_txt = ' '

        """
        else:    #print("visited 'ELSE'")

            if SPB_loop.thisN+1 == SPB_loops and respTime >= (dur_inhaleIHOH+durHold): #exhale:
                #print("visited 'ELSE + exhale'")
                #print("visited 'ELSE + HV_loop.thisN +1 =='")

                if not tonce:
                    #print("visited 'ELSE + HV_loop.thisN +1 =='")
                    respTime = 0
                    respClock.reset()
                    tonce = True
        """
        """
                circle_color = 'orange'   #exhale_color
                resp_txt = '(langsamer)\nAusatmen'
                circ_dia = res_size -cosXYshift*cos(pi*respTime/3 + (3*pi/2)) + cosXYshift
            #   circ_dia = res_size -cosXYshift*cos(pi*respTime/(dur_exhaleIHOH+durHold) + shift_x) + cosXYshift
                circ_dia = res_size -cosXYshift*cos(pi*respTime/(dur_inhaleIHOH+durHold)) + cosXYshift
        """

        """
                SPB_loop.finished = True
                #print("   |   QUIT   |   BREAK   |   EXIT   |   ")
                continueRoutine = False
        """

        """
                if respTime >= (dur_inhaleIHOH+durHold):
                    print("visited 'ELSE + exhale + respTime >='")

                    if HV_loop.thisN+1 == HV_loops:
                        resp_txt = ' '
                        print("EXIT: HV-loop @ current HV-loop = ", HV_loop.thisN)
                        HV_loop.finished = True
                        HVonce = True
               #if not HVonce and HV_loop.thisN+1 == HV_loops:
        """

        """
        ##  > hold
        #if respTime >= (dur_inhaleIHOH+durHold+dur_exhaleIHOH): resp_txt = ' ' #no 'hold' for HV
        """
      End Routine:
        win.mouseVisible = True
    PolygonComponent c_resp_frame
      contrast = 0.5
      fillColor = 0.8824, 0.9451, 1.0000
      lineColor = black
      opacity = 0.5
      pos = (0, main_pos_y_px)
      shape = circle
      size = (circle_size+frameExtension, circle_size+frameExtension)
      startVal [time (s)] = 0.0
      stopVal [condition] = respTime >= (dur_inhaleIHOH + durHold + dur_exhaleIHOH + durHold)
      units = pix
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    PolygonComponent resp_circle
      fillColor [set every frame] = $circle_color
      lineColor [set every frame] = $circle_color
      pos = (0, main_pos_y_px)
      shape = circle
      size [set every frame] = (circ_dia, circ_dia)
      startVal [time (s)] = 0.0
      stopVal [condition] = respTime >= (dur_inhaleIHOH + durHold + dur_exhaleIHOH + durHold)
      units = pix
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    TextComponent c_resp_txt
      color = black
      contrast = .75
      letterHeight [set every frame] = b_txt_size*1000
      opacity = .75
      pos = (0, main_pos_y_px)
      startVal [time (s)] = 0.0
      stopVal [condition] = respTime >= (dur_inhaleIHOH + durHold + dur_exhaleIHOH + durHold)
      text [set every frame] = $resp_txt
      units = pix
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  Routine SPB3min_stop
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    CodeComponent SPB3min_stop_mrk
      Code Type = Py
      Begin Routine:
        ##  marker: SPB 3min STOP  ##
        Marker.setData(43); core.wait(0.1); Marker.setData(0)
  Routine TTCT_rating
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    CodeComponent TTCTrating_code
      Code Type = Py
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      End Routine:
        ##  marker: TTCTrating STOP  ##
        Marker.setData(85); core.wait(0.1); Marker.setData(0)
    TextComponent TTCT_r_header_txt
      color = black
      letterHeight = 0.045
      pos = (0, header_pos_y)
      startVal [time (s)] = 0.0
      text = Wie kreativ findest Du Deine Antwort
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    SliderComponent TTCT_VASrating
      color = black
      forceEndRoutine = False
      granularity = 0
      initVal = 5
      letterHeight = 0.7035
      pos = (0, main_pos_y)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = ['slider']
      ticks = 0,1,2,3,4,5,6,7,8,9,10
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    KeyboardComponent TTCT_r_end_key
      allowedKeys = 'w','return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent TTCT_l_label
      color = blue
      letterHeight = 0.03
      pos = (-.5, main_pos_y - .075)
      startVal [time (s)] = 0.0
      text = gar nicht kreativ
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    TextComponent TTCT_r_label
      color = blue
      letterHeight = 0.03
      pos = (.5, main_pos_y - .075)
      startVal [time (s)] = 0.0
      text = sehr kreativ
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    PolygonComponent TTCT_r1_btn
      fillColor = $[1,1,1]
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.125, 0.0475)
      startVal [time (s)] = 0.0
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    MouseComponent TTCT_r1_mse
      clickable = TTCT_r1_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = VASrating.getMouseResponses() != None
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    TextComponent TTCT_rating_hint
      color = black
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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  Routine AUT_rating
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    CodeComponent AUTrating_code
      Code Type = Py
      End Routine:
        ##  marker: AUTrating STOP  ##
        Marker.setData(97); core.wait(0.1); Marker.setData(0)
    TextComponent r_header_txt
      color = black
      letterHeight = 0.045
      pos = (0, header_pos_y)
      startVal [time (s)] = 0.0
      text = Wie kreativ findest Du Deine Antwort
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    SliderComponent VASrating
      color = black
      forceEndRoutine = False
      granularity = 0
      initVal = 5
      letterHeight = 0.7035
      pos = (0, main_pos_y)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = ['slider']
      ticks = 0,1,2,3,4,5,6,7,8,9,10
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    KeyboardComponent r_end_key
      allowedKeys = 'w','return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent l_label
      color = blue
      letterHeight = 0.03
      pos = (-.5, main_pos_y - .075)
      startVal [time (s)] = 0.0
      text = gar nicht kreativ
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    TextComponent r_label
      color = blue
      letterHeight = 0.03
      pos = (.5, main_pos_y - .075)
      startVal [time (s)] = 0.0
      text = sehr kreativ
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    PolygonComponent r1_btn
      fillColor = $[1,1,1]
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.125, 0.0475)
      startVal [time (s)] = 0.0
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    MouseComponent r1_mouse
      clickable = r1_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = VASrating.getMouseResponses() != None
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    TextComponent rating_hint
      color = black
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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  Routine wait
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    CodeComponent wait_code
      Code Type = Py
      Begin Routine:
        ##do nothing, just wait for the return from web-TTCT...
        if TTCTitem_presented:
            continueRoutine = False
Flow
  Routine _settings
  LoopInitiator main_ins_byp loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('slide', 'stim\\Instr\\Instr_X.JPG'), ('ins_dur', 999), ('ins_hint_txt', '„Weiter mit Leertaste“')]),
      OrderedDict([('slide', 'stim\\Instr\\Ablauf_neu.JPG'), ('ins_dur', 999), ('ins_hint_txt', '„Weiter mit Leertaste“')]),
      OrderedDict([('slide', 'stim\\Instr\\Start_Probe.JPG'), ('ins_dur', 5), ('ins_hint_txt', None)]),
      OrderedDict([('slide', 'stim\\Instr\\Trigger Info.JPG'), ('ins_dur', 999), ('ins_hint_txt', '„Weiter mit Leertaste“')])]
    LoopInitiator main_ins_orig loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 0
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      Routine main_ins
    LoopTerminator main_ins_orig
    Routine main_ins1
    Routine main_ins2
    Routine main_ins3
  LoopTerminator main_ins_byp
  LoopInitiator SPB_ins_byp loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine SPB_ins
  LoopTerminator SPB_ins_byp
  LoopInitiator SPB_byp loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine go4spb
    LoopInitiator SPB_loop loopType="TrialHandler"
      loopType = sequential
      nReps = SPB_loops
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      Routine SPB
    LoopTerminator SPB_loop
    Routine SPB3min_stop
  LoopTerminator SPB_byp
  LoopInitiator p_start_byp loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine p_start
  LoopTerminator p_start_byp
  LoopInitiator pract_byp loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine p_item
    LoopInitiator p_idea_loop loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine p_idea
    LoopTerminator p_idea_loop
  LoopTerminator pract_byp
  LoopInitiator crea_tasks_byp loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine descCreaTasks
  LoopTerminator crea_tasks_byp
  LoopInitiator start_byp loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 0
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    Routine start
  LoopTerminator start_byp
  LoopInitiator crea_blocks loopType="TrialHandler"
    conditionsFile = stim/crea_blocks.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('crea_block_4', 'AUT'), ('crea_block_2', 'AUT'), ('crea_block', 'AUT'), ('AUT_run', 1), ('TTCT_run', 0)]),
      OrderedDict([('crea_block_4', 'AUT'), ('crea_block_2', 'AUT'), ('crea_block', 'TTCT'), ('AUT_run', 0), ('TTCT_run', 1)]),
      OrderedDict([('crea_block_4', 'AUT'), ('crea_block_2', 'TTCT'), ('crea_block', 'AUT'), ('AUT_run', 1), ('TTCT_run', 0)]),
      OrderedDict([('crea_block_4', 'AUT'), ('crea_block_2', 'TTCT'), ('crea_block', 'TTCT'), ('AUT_run', 0), ('TTCT_run', 1)]),
      OrderedDict([('crea_block_4', 'TTCT'), ('crea_block_2', 'AUT'), ('crea_block', 'AUT'), ('AUT_run', 1), ('TTCT_run', 0)]),
      OrderedDict([('crea_block_4', 'TTCT'), ('crea_block_2', 'AUT'), ('crea_block', 'TTCT'), ('AUT_run', 0), ('TTCT_run', 1)]),
      OrderedDict([('crea_block_4', 'TTCT'), ('crea_block_2', 'TTCT'), ('crea_block', 'AUT'), ('AUT_run', 1), ('TTCT_run', 0)]),
      OrderedDict([('crea_block_4', 'TTCT'), ('crea_block_2', 'TTCT'), ('crea_block', 'TTCT'), ('AUT_run', 0), ('TTCT_run', 1)])]
    Routine crea_items_count
    LoopInitiator byp_AUTinfo loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 0
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      Routine AUT_info
    LoopTerminator byp_AUTinfo
    LoopInitiator AUT_trials loopType="TrialHandler"
      Selected rows = 0
      loopType = random
      nReps = AUT_run
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      conditions:
        [OrderedDict([('AUT_items', 'Gabel'), ('orig_collection', 'Gabel')]),
        OrderedDict([('AUT_items', 'Bananenschale'), ('orig_collection', 'Bananenschale')]),
        OrderedDict([('AUT_items', 'Tischtennisball'), ('orig_collection', 'Tischtennisball')]),
        OrderedDict([('AUT_items', 'Klopapier'), ('orig_collection', 'Klopapier')]),
        OrderedDict([('AUT_items', 'Stirnband'), ('orig_collection', 'Stirnband')]),
        OrderedDict([('AUT_items', 'Socke'), ('orig_collection', 'Socke')]),
        OrderedDict([('AUT_items', 'Blumenvase'), ('orig_collection', 'Blumenvase')]),
        OrderedDict([('AUT_items', 'Lampe'), ('orig_collection', 'Lampe')]),
        OrderedDict([('AUT_items', 'Hufeisen'), ('orig_collection', 'Hufeisen')]),
        OrderedDict([('AUT_items', 'Knetmasse'), ('orig_collection', 'Knetmasse')]),
        OrderedDict([('AUT_items', 'Konservendose'), ('orig_collection', 'Konservendose')]),
        OrderedDict([('AUT_items', 'Zahnbürste'), ('orig_collection', 'Zahnbürste (Zahnburste/Zahnbuerste)')]),
        OrderedDict([('AUT_items', 'Bügeleisen'), ('orig_collection', 'Bügeleisen')]),
        OrderedDict([('AUT_items', 'Pflaster'), ('orig_collection', 'Pflaster')]),
        OrderedDict([('AUT_items', 'Kleiderhaken'), ('orig_collection', 'Kleiderhaken')]),
        OrderedDict([('AUT_items', 'Autoreifen'), ('orig_collection', 'Autoreifen')]),
        OrderedDict([('AUT_items', 'Spiegel'), ('orig_collection', 'Spiegel')]),
        OrderedDict([('AUT_items', 'Schaumstoffpolster'), ('orig_collection', 'Schaumstoffpolster')]),
        OrderedDict([('AUT_items', 'Reisekoffer'), ('orig_collection', 'Reisekoffer')])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
      LoopInitiator AUTitem_loop loopType="TrialHandler"
        loopType = random
        nReps = 1
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        conditions:
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        Routine AUTtrial
        Routine t_AUTanswer
        Routine AUT_rating
      LoopTerminator AUTitem_loop
    LoopTerminator AUT_trials
    LoopInitiator TTCT_trials loopType="TrialHandler"
      Selected rows = 1
      loopType = random
      nReps = TTCT_run
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      conditions:
        [OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild01sw.jpg'), ('stim_draft', 'B01_draft.jpg'), ('stim_elab', 'B01_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild02sw.jpg'), ('stim_draft', 'B02_draft.jpg'), ('stim_elab', 'B02_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild03sw.jpg'), ('stim_draft', 'B03_draft.jpg'), ('stim_elab', 'B03_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild04sw.jpg'), ('stim_draft', 'B04_draft.jpg'), ('stim_elab', 'B04_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild05sw.jpg'), ('stim_draft', 'B05_draft.jpg'), ('stim_elab', 'B05_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild06sw.jpg'), ('stim_draft', 'B06_draft.jpg'), ('stim_elab', 'B06_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild07sw.jpg'), ('stim_draft', 'B07_draft.jpg'), ('stim_elab', 'B07_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild08sw.jpg'), ('stim_draft', 'B08_draft.jpg'), ('stim_elab', 'B08_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild09sw.jpg'), ('stim_draft', 'B09_draft.jpg'), ('stim_elab', 'B09_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild10sw.jpg'), ('stim_draft', 'B10_draft.jpg'), ('stim_elab', 'B10_elab.jpg')])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
      Routine b2TTCTonline
      Routine wait
      Routine TTCT_rating
    LoopTerminator TTCT_trials
    LoopInitiator goSPB_byp loopType="TrialHandler"
      loopType = sequential
      nReps = go_SPB1min
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      LoopInitiator SPB1min_loop loopType="TrialHandler"
        loopType = sequential
        nReps = SPB_loops_1min
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        Routine SPB
      LoopTerminator SPB1min_loop
    LoopTerminator goSPB_byp
  LoopTerminator crea_blocks
  Routine thx
