PsychoPy2experiment version="2024.1.5"
Settings
  Audio latency priority = 1
  Audio lib = pygame
  Data filename = u'data/%s_%s_%s' % (expInfo['UPN-ID'], expName, expInfo['date'])
  Experiment info = {'UPN-ID': '999', 'study-ID': '1417'}
  Full-screen window = True
  Monitor = HD-Lab
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = 2024.1.5
  Window size (pixels) = [1920, 1080]
  expName = crea_freebreathing
  keyboardBackend = ioHub
  logging level = error
  measureFrameRate = False
  runMode = 1
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Routines
  Routine _settings
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    CodeComponent set_things
      Code Type = Py
      Begin Experiment:
        ##  ##  ################################################################  ##  ##
        ## ##                                                                      ## ##
        ## ##                           CREA - BREATHING                           ## ##
        ## ##          AUT/TTCT * HYPEVENTILATION/PACED & NORMAL BREATHING         ## ##
        ## ##             (TTCT-digital on wacomONE (behavioral))                  ## ##
        ## ##                                                                      ## ##
        ## #########################|08/2024|bw (bernhard.weber@uni-graz.at)|CC-BY|## ##

        ##  import/load some extra modules/packages  ##
        import csv      #for stim-files
        import random   #for image sub-sample


        ##  Options for DEBUG/RESARCH-mode  ##
        DEBUG = 0   #0=research-mode; 1=debug-mode
        if DEBUG:
            itemDur             = 18
            fixDur              = 0     #option: set time, use fixation
            AUTitem_dur         = 9
            descCrea_dur        = 3
            TTCTitem_dur        = 9
            TTCTdraft_time      = 15    #4debug  #Zeit zum Skizzieren >sketch + time2finish<
            time2finish         = 3     #4debug  #time 2 finish after warning/DING
            disp_thx            = 0

            breathing_dur       = 5     #duration natural/free breathing - starting condition
            crea_breathing_dur  = 3     #duration natural/free breathing - crea-items condition
        else:
            itemDur             = 180
            fixDur              = 0     #option: set time, use fixation
            AUTitem_dur         = 60
            descCrea_dur        = 10     #10s instruction/description of crea tasks
            TTCTitem_dur        = 60
            TTCTdraft_time      = 25    #4debug  #Zeit zum Skizzieren >sketch + time2finish<
            time2finish         = 3     #4debug  #time 2 finish after warning/DING
            disp_thx            = 1

            breathing_dur       = 120   #duration natural/free breathing (2min) - starting condition
            crea_breathing_dur  = 60    #duration natural/free breathing (1min) - crea-items condition

        ##  enable parallel port for markers  ##
        from psychopy import parallel
        Marker = parallel.ParallelPort(address=0x3FF8)


        ##  Options for ONSCREEN-KEYBOARD (touchscreen WACOM ONE)  ##
        ONSCREENKEYBOARD = 1   #0=NO onscreen keyboard; 1=ONSCREEN-KEYBOARD with touchscreen WACOM ONE
        if ONSCREENKEYBOARD:
            header_pos_y = .40
            main_pos_y   = .225
            btn_pos_y    = .05
            hint_pos_y   = 0
        else:
            header_pos_y = .40
            main_pos_y   = 0
            btn_pos_y    = -.25
            hint_pos_y   = -.45


        ##  initialize some vars  ##
        cwd = os.getcwd()
        win.mouseVisible = True
        warning = sound.Sound('stim//DING.ogg')

        NB_trials = 1   #natural breathing (cycle)s


        ##  search for window-handles by only a partial name  ##
        import win32gui
        import win32gui_struct

        def find_window_with_partial_name(partial_name):
            top_windows = []

            def _enum_windows_callback(hwnd, extra):
                nonlocal top_windows
                name = win32gui.GetWindowText(hwnd)
                if partial_name in name:
                    top_windows.append((hwnd, name))

            win32gui_enumwindows_func = win32gui.EnumWindows
            win32gui_enumwindows_func(_enum_windows_callback, None)

            for hwnd, name in top_windows:
                if win32gui.IsWindowVisible(hwnd):
                    return hwnd

            return None
        """
        # Example usage
        partial_window_name = "PartialName"
        window_handle = find_window_with_partial_name(partial_window_name)
        if window_handle:
            print(f"Window with partial name '{partial_window_name}' found, handle: {window_handle}")
        else:
            print(f"No window with partial name '{partial_window_name}' found")
        """


         ## ### # ###  # ## #  ## # ### ##
        ##  monsieur claude and it's ai  ##
        ###  ### ## # ### #  ##  ### # ##

        ##  Function to read stimulus names from CSV file
        def read_stimuli_from_csv(filename, column_name='stimulus'):
            stimuli_from_file = []
            with open(filename, 'r', encoding='utf-8') as file:
                csv_reader = csv.DictReader(file)
                for row in csv_reader:
                    stimuli_from_file.append(row[column_name])
            return stimuli_from_file


        ##  Function to create visual items: stimuli-names & prefixes, images, positions, sizes
        def create_items(stimuli_names, positions, prefix):
            items = []
            for stim_img, pos, i in zip(stimuli_names, positions, range(items2present)):
                item = visual.ImageStim(win, name=f'{prefix}_{i}', image=stim_img, pos=pos, size=(x_dim, y_dim))
                items.append(item)
            return items


        ##  Read AUT-stimuli (names) from CSV-file
        AUTitems_csv_filename = 'stim/AUTstim.csv'
        # ## stimuli_names = read_stimuli_from_csv(csv_filename, 'stimulus_name')   # Replace 'stimulus_name' with your actual column name
        AUT_items = read_stimuli_from_csv(AUTitems_csv_filename, 'AUT_items')
        #print(f'{AUT_items=}')


        ##  Read TTCTonline-stimuli (number(s)) from CSV-file
        TTCTitems_csv_filename = 'stim/TTCTonline_stim.csv'
        # ## stimuli_names = read_stimuli_from_csv(csv_filename, 'stimulus_name')   # Replace 'stimulus_name' with your actual column name
        TTCT_items = read_stimuli_from_csv(TTCTitems_csv_filename, 'TTCTonline_stim')
        #print(f'{TTCT_items=}')


        ##  Function to write a list to a .txt file
        def write_list_to_txt(filename, my_list):
            """
            Write a list to a text file, with each item on a new line.

            :param filename: Name of the text file to write to
            :param my_list: List of items to write
            """
            with open(filename, 'w') as file:
                for item in my_list:
                    file.write(f"{item}\n")


        ##  Function to read a list from a .txt file
        def read_list_from_txt(filename):
            """
            Read a list from a text file, removing newline characters.

            :param filename: Name of the text file to read from
            :return: List of items read from the file
            """
            with open(filename, 'r') as file:
                return [line.strip() for line in file]
      Begin Routine:
        ##  marker: NB START  ##
        Marker.setData(201); core.wait(0.1); Marker.setData(0)

        ##  define some vars
        selected_actions_list = []          #mouse-click-selected actions
        selected_actionPictures_list = []   #image-names of selected actions
        selected_actions = 0                #selection counter

        actions_end_waiting = False         #wait to end time after last selection click


        ##  select (n) AUT-items for each block
        shuffle(AUT_items)          #aller guten
        shuffle(AUT_items)          #Dinge sind
        shuffle(AUT_items)          #drei(mal)
        # AUTitems_block1 = random.sample(AUT_items, 4)           #items_block1 ... natural breathing
        AUTitems_block1 = AUT_items[:4]                 #items_block1 ... natural breathing
        #print(f'{AUTitems_block1=}')
        # AUTitems_block2 = random.sample(AUT_items, 4)           #items_block2 ... hyperventialation/SPB
        AUTitems_block2 = AUT_items[4:8]                #items_block2 ... hyperventialation/SPB
        #print(f'{AUTitems_block2=}')
        # AUTitems_block3 = random.sample(AUT_items, 4)           #items_block3 ... SPB/hyperventialation
        AUTitems_block3 = AUT_items[-4:]                 #items_block3 ... SPB/hyperventialation
        #print(f'{AUTitems_block3=}')

        ##  select (n) TTCT-items for each block
        shuffle(TTCT_items)          #aller guten
        shuffle(TTCT_items)          #Dinge sind
        shuffle(TTCT_items)          #drei(mal)
        # TTCTitems_block1 = random.sample(TTCT_items, 4)           #items_block1 ... natural breathing
        TTCTitems_block1 = TTCT_items[:4]                 #items_block1 ... natural breathing
        #print(f'{TTCTitems_block1=}')
        # TTCTitems_block2 = random.sample(TTCT_items, 4)           #items_block2 ... hyperventialation/SPB
        TTCTitems_block2 = TTCT_items[4:8]                #items_block2 ... hyperventialation/SPB
        #print(f'{TTCTitems_block2=}')
        # TTCTitems_block3 = random.sample(TTCT_items, 4)           #items_block3 ... SPB/hyperventialation
        TTCTitems_block3 = TTCT_items[-4:]                 #items_block3 ... SPB/hyperventialation
        #print(f'{AUTitems_block3=}')


        ##  write the AUT lists to files
        #log_dir     = cwd + "//idea_log//" + expInfo['UPN-ID']
        write_list_to_txt(f'{cwd}//stim//subj_AUTlists//{participant_ID}_AUTitems_block1.txt', AUTitems_block1)
        write_list_to_txt(f'{cwd}//stim//subj_AUTlists//{participant_ID}_AUTitems_block2.txt', AUTitems_block2)
        write_list_to_txt(f'{cwd}//stim//subj_AUTlists//{participant_ID}_AUTitems_block3.txt', AUTitems_block3)

        ##  write the TTCT lists to files
        write_list_to_txt(f'{cwd}//stim//subj_TTCTlists//{participant_ID}_TTCTitems_block1.txt', TTCTitems_block1)
        write_list_to_txt(f'{cwd}//stim//subj_TTCTlists//{participant_ID}_TTCTitems_block2.txt', TTCTitems_block2)
        write_list_to_txt(f'{cwd}//stim//subj_TTCTlists//{participant_ID}_TTCTitems_block3.txt', TTCTitems_block3)


        ##  read (a) certain AUT list(s) from file(s)
        AUTitems_block1 = read_list_from_txt(f'{cwd}//stim//subj_AUTlists//{participant_ID}_AUTitems_block1.txt')
        #print(f'{AUTitems_block1=}')
        AUTitems_block2 = read_list_from_txt(f'{cwd}//stim//subj_AUTlists//{participant_ID}_AUTitems_block2.txt')
        #print(f'{AUTitems_block2=}')
        AUTitems_block3 = read_list_from_txt(f'{cwd}//stim//subj_AUTlists//{participant_ID}_AUTitems_block3.txt')
        #print(f'{AUTitems_block3=}')

        ##  read (a) certain TTCT list(s) from file(s)
        TTCTitems_block1 = read_list_from_txt(f'{cwd}//stim//subj_TTCTlists//{participant_ID}_TTCTitems_block1.txt')
        #print(f'{TTCTitems_block1=}')
        TTCTitems_block2 = read_list_from_txt(f'{cwd}//stim//subj_TTCTlists//{participant_ID}_TTCTitems_block2.txt')
        #print(f'{TTCTitems_block2=}')
        TTCTitems_block3 = read_list_from_txt(f'{cwd}//stim//subj_TTCTlists//{participant_ID}_TTCTitems_block3.txt')
        #print(f'{TTCTitems_block3=}')
      End Experiment:
        ##  marker: NB STOP  ##
        Marker.setData(203); core.wait(0.1); Marker.setData(0)
  Routine thx
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    TextComponent thx_txt
      durationEstim = 5
      letterHeight = 0.035
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Vielen Dank,

        dieser Teil der Untersuchung ist zu Ende.
    KeyboardComponent thx_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    TextComponent thx_hint
      color = $[-0.25,-0.25,-0.25]
      letterHeight = 0.025
      pos = (.25, -.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Beenden mit Enter
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  Routine t_AUTanswer
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    CodeComponent AUTanswer_code
      Code Type = Py
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      Begin Routine:
        ##  marker: AUTanswer START  ##
        Marker.setData(53); core.wait(0.1); Marker.setData(0)
      End Routine:
        ##  marker: AUTanswer STOP  ##
        Marker.setData(55); core.wait(0.1); Marker.setData(0)
    TextComponent ans_prompt
      color = black
      letterHeight = 0.045
      pos = (0, header_pos_y)
      startVal [time (s)] = 0
      wrapWidth = 1
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      text:
        Bitte tippen Sie hier Ihre (beste) Antwort ein:
    TextboxComponent answer_box
      bold = False
      borderColor = grey
      color = green
      editable = True
      fillColor = lightgrey
      letterHeight = 0.04
      overflow = hidden
      pos = (0, main_pos_y)
      size = (0.75, 0.09)
      startVal [time (s)] = 0.0
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    PolygonComponent go_on_btn
      fillColor = white
      lineColor = darkgrey
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.125, 0.0475)
      startVal [time (s)] = 0.0
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    TextComponent go_on_txt
      color = black
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent go_on_mse
      clickable = go_on_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = answer_box.getText() != ""
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    TextComponent ans_hint
      color = darkgreen
      disabled = True
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text = Bestätigen/Beenden der Eingabe mit Return-/Enter-Taste
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  Routine AUTtrial
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    CodeComponent AUT_code
      Code Type = Py
      Begin Experiment:
        presented_AUTitems = 0
      Begin Routine:
        ##  marker: AUTtrials START  ##
        Marker.setData(51); core.wait(0.1); Marker.setData(0)

        AUTitem = AUTitems_block1[presented_AUTitems]
        #print(f'{AUTitem=}')
        AUT_trials.addData('AUTitem', AUTitem)  #’trials’=current loop
      End Routine:
        presented_AUTitems += 1
        #print(f'{presented_AUTitems=}')
    TextComponent AUT_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    ParallelOutComponent AUT_mrk
      address = 0x3FF8
      register = EIO
      startData = 23
      startVal [condition] = AUT_fix.status==FINISHED
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent AUT_item
      color = blue
      letterHeight = 0.05
      pos = (0, main_pos_y)
      startVal [condition] = AUT_fix.status==FINISHED
      stopVal [duration (s)] = $AUTitem_dur
      text [set every repeat] = $AUTitem
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    KeyboardComponent AUT_idea_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $AUTitem_dur
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    PolygonComponent AUT_idea_btn
      fillColor = white
      lineColor = darkgrey
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.125, 0.0475)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $AUTitem_dur
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    TextComponent AUT_idea_txt
      color = black
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $AUTitem_dur
      text = Idee!
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    MouseComponent AUT_idea_mse
      clickable = AUT_idea_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $AUTitem_dur
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    TextComponent AUT_idea_hint
      color = darkgreen
      disabled = True
      letterHeight = 0.025
      pos = (0, hint_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $AUTitem_dur
      text = Bei Idee: Weiter mit MAUS (Klick auf 'Idee!') oder SPACE-/LEERTASTE
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  Routine free_breathing
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    CodeComponent call_free_breathing
      Code Type = Py
  Routine b2TTCTonline
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    CodeComponent b2_TTCT_code
      Code Type = Py
      Begin Experiment:
        ## -------------------------------------------------------------------------- ##
        ##                          FOR BROWSER INTERACTION                           ##
        ## -------------------------------------------------------------------------- ##
        from selenium import webdriver
        #from selenium.webdriver.common.keys import Keys
        from selenium.webdriver.common.action_chains import ActionChains
        from selenium.webdriver.chrome.options import Options   #>>disable "search-engine-choice" (07/2024)

        ##  claude script imports  ##
        #from selenium.webdriver.common.by import By
        from selenium.webdriver.support.ui import WebDriverWait
        from selenium.webdriver.support import expected_conditions as EC
        from selenium.common.exceptions import TimeoutException, NoAlertPresentException

        import win32gui
        import win32con

        ##  set/define some important variables
        presented_TTCTitems = 0
        #study_ID = '9999'              #default
        study_ID = '1417'               #!defined! study_id > 'Angerbauer' (2024/25) = study_ID = '1417'
        #study_ID = expInfo['study-ID']  #study_id 'Angerbauer' (2024/25)
        #participant_ID = '747'
        participant_ID = expInfo['UPN-ID']


        ##  ###   detect all the 'important' windows   ###  ##
        #if window_handle:
        #    print(f"Window with partial name '{partial_window_name}' found, handle: {window_handle}")
        #else:
        #    print(f"No window with partial name '{partial_window_name}' found")
        PsychoPyBuilderWin = find_window_with_partial_name("Builder")
        win32gui.ShowWindow(PsychoPyBuilderWin, win32con.SW_MINIMIZE)
        PsychoPyRunnerWin = find_window_with_partial_name("Runner")
        runParadigmaWindow = win32gui.FindWindow(None,"PsychoPy")


        ##  Initialize browser and other variables
        browser = None


        ##  Loading the webdriver by using the add-on "chromedriver.exe" in the root directory
        chrome_options = Options()                                              #>>disable "search-engine-choice" (07/2024)
        chrome_options.add_argument("--disable-search-engine-choice-screen")    #>>disable "search-engine-choice" (07/2024)
        browser = webdriver.Chrome(options=chrome_options)                      #chromedriver


        ##  def wait_for_alert_and_close(browser, timeout=60)  ##
        def wait_for_alert_and_close(browser, timeout=TTCTitem_dur):
            #Wait for alert to be present and then close browser when user clicks OK
            # :param driver: Selenium WebDriver instance
            # :param timeout: Maximum wait time for alert in seconds
            try:
                # ## Wait for alert to be present
                alert = WebDriverWait(browser, timeout).until(EC.alert_is_present())

                # ## Get alert text
                alert_text = alert.text
                #print(f"Alert text: {alert_text}")

                # ## Pause and wait for user to manually click OK
                #print("ALERT DETECTED: Please click OK on the alert.")
                #print("The script will wait for you to interact with the alert.")

                # ## Wait until alert is no longer present (indicating user clicked OK)
                WebDriverWait(browser, timeout).until_not(EC.alert_is_present())
                #print("TTCT item - done!")

            except NoAlertPresentException:
                print("No alert found.")
            except TimeoutException:
                print(f"No alert appeared or was not handled within {timeout} seconds.")
            finally:
                win32gui.ShowWindow(runParadigmaWindow, win32con.SW_MAXIMIZE)           #maximize "running paradigma"(-PsychoPy) window
                # ## minimize the browser window
                browser.minimize_window()                                               #minimize the browser window
                # ## Close and quit the browser
                #print("browser.close()")
                #browser.close()
                #print("browser.quit()")
                #browser.quit()
      Begin Routine:
        ##  marker: TTCT START  ##
        Marker.setData(61); core.wait(0.1); Marker.setData(0)

        ##  select current TTCTitem
        TTCTitem_presented = False      #flag for 'wait'-routine
        TTCTitem = TTCTitems_block1[presented_TTCTitems]
        TTCT_trials.addData('TTCTitem', TTCTitem)  #’trials’=current loop


        ##  handle (some) windows
        win32gui.ShowWindow(runParadigmaWindow, win32con.SW_MINIMIZE)       #Minimize "running paradigma"(-PsychoPy) window


        ##  web interaction
        #url = f"https://webpsy2.uni-graz.at/ges1www/crea_draw/?studyId=999&participantId=77"
        url = f"https://webpsy2.uni-graz.at/ges1www/crea_draw/?studyId={study_ID}_{TTCTitem}&participantId={participant_ID}"

        try:
            #print("browser.get(url)")
            browser.get(url)                            #Navigate to website
            browser.maximize_window()                   #Maximize the browser window

            # ##Wait for alert and handle browser closure
            wait_for_alert_and_close(browser)      #no specific 'time-out'-param (default = 60s)
            #wait_for_alert_and_close(browser, 5)    #set a 'time-out'-param

        except Exception as e:
            print(f"An error occurred: {e}")
            #browser.quit()

        core.wait(.1)
      End Experiment:
        ##  Maximize 'PsychoPy-Builder' Window
        #win32gui.ShowWindow(PsychoPyBuilderWin, win32con.SW_MAXIMIZE)
        #core.wait(0.1)
      End Routine:
        ##  marker: TTCT STOP  ##
        Marker.setData(63); core.wait(0.1); Marker.setData(0)

        presented_TTCTitems += 1
        #print(f'{presented_TTCTitems=}')
        TTCTitem_presented = True

        ##  maximize >runParadigma<-window
        win32gui.ShowWindow(runParadigmaWindow, win32con.SW_MAXIMIZE)           #maximize "running paradigma"(-PsychoPy) window


        ##  Close the browser window and wait
        #browser.quit()
        core.wait(0.1)

        """
        ##  maximize >runParadigma<-window
        win32gui.ShowWindow(runParadigmaWindow, win32con.SW_MAXIMIZE)           #maximize "running paradigma"(-PsychoPy) window
        """
  Routine NB_1min
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    CodeComponent NB1min_code
      Code Type = Py
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      Begin Routine:
        ##  marker: NB1min START  ##
        Marker.setData(25); core.wait(0.1); Marker.setData(0)
      End Routine:
        ##  marker: NB1min STOP  ##
        Marker.setData(27); core.wait(0.1); Marker.setData(0)
    TextComponent NB1min_txt
      color = black
      durationEstim = 60
      letterHeight = 0.035
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $crea_breathing_dur
      text = ...einfach ganz normal weiteratmen...
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    TextComponent NB1m_countdown
      color = blue
      letterHeight = 0.075
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $crea_breathing_dur
      text [set every frame] = $str(crea_breathing_dur-int(t))
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  Routine NB_ins
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    CodeComponent nb_ins_code
      Code Type = Py
      Begin Routine:
        nb_ins_txt.alignText = 'center'
    TextComponent nb_ins_header
      color = black
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Spontanatmung
      wrapWidth = 1
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    TextComponent nb_ins_txt
      color = black
      letterHeight = 0.0325
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Atme für zwei Minuten in deiner individuellen Atemgeschwindigkeit,
        ohne die Frequenz bewusst zu erhöhen oder zu verlangsamen.

        Wenn du bereit bist > "Weiter"
    KeyboardComponent nb_ins_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent nb_ins_btn
      fillColor = lightgrey
      lineColor = black
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent nb_ins_hint
      color = darkgreen
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent nb_ins_mse
      clickable = nb_ins_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine go_NB3min
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    TextComponent startNB3min_txt
      color = black
      letterHeight = 0.035
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = ...es beginnt das freie Atmen...
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  Routine NB_3min
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    CodeComponent NB3min_code
      Code Type = Py
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      Begin Routine:
        ##  marker: NB3min START  ##
        Marker.setData(21); core.wait(0.1); Marker.setData(0)
      End Routine:
        ##  marker: NB3min STOP  ##
        Marker.setData(23); core.wait(0.1); Marker.setData(0)
    TextComponent NB3min_txt
      color = black
      letterHeight = 0.035
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $breathing_dur
      text = ...einfach ganz normal weiteratmen...
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    TextComponent NB3min_countdown
      color = blue
      letterHeight = 0.05
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $breathing_dur
      text [set every frame] = $str(breathing_dur-int(t))
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  Routine AUT_info
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    CodeComponent AUT_info_code
      Code Type = Py
      Begin Routine:
        print(" ")
        print(f'{crea_blocks=}')
        print(f'{crea_blocks.trialList=}')
        print(f'{crea_blocks.trialList[0]=}')
        print(f'{AUT_run=} | {TTCT_run=}');
        print(" ")
  Routine desc_CREAtasks
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    CodeComponent crea_tasks_code33
      Code Type = Py
      Begin Routine:
        m_ins_txt.alignText = 'left'
    TextComponent crea_tasks_header33
      color = black
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      text = Beschreibung Krea-Tests (AUT und TTCT)
      wrapWidth = 1.25
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    TextComponent crea_tasks_txt33
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        AUT = Es werden Alltagsgegenstände gezeigt (z.B. ein Buch, ein Schirm, ein Ziegelstein) zu welchen innerhalb von 60 Sekunden einen möglichst originellen, neuartigen alternativen Verwendungszweck überlegt werden soll.

        TTCT = Es werden 60 Sekunden lang verschiedene Formen und unvollständige Figuren vorgegeben mit der Bitte, diese zu einem kreativen Bild zu vervollständigen.
  Routine descCreaTasks
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    CodeComponent crea_tasks_code
      Code Type = Py
      Begin Routine:
        crea_tasks_txt.alignText = 'left'
    TextComponent crea_tasks_header
      color = black
      letterHeight = 0.05
      pos = (0, .4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $descCrea_dur
      text = Beschreibung der Kreativitäts-Tasks (AUT und TTCT)
      wrapWidth = 1.25
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    TextComponent crea_tasks_txt
      color = black
      letterHeight = 0.0325
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $descCrea_dur
      wrapWidth = 1.25
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      text:
        AUT = Worte von Alltagsgegenständen werden am Bildschirm gezeigt (z.B. "Buch", "Schirm", "Ziegelstein"). Nenne innerhalb von 60 Sekunden die originellste Verwendung, die dir für diesen Gegenstand einfällt!

        TTCT = Verschiedene Formen und unvollständige Figuren werden jeweils 60 Sekunden lang gezeigt. Bitte vervollständige dieses Bildfragment möglichst kreativ!
    KeyboardComponent crea_tasks_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $descCrea_dur
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    PolygonComponent crea_tasks_btn
      fillColor = lightgrey
      lineColor = black
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $descCrea_dur
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    TextComponent crea_tasks_hint
      color = darkgreen
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $descCrea_dur
      text = Weiter
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    MouseComponent crea_tasks_mse
      clickable = crea_tasks_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $descCrea_dur
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  Routine main_ins1
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    CodeComponent m_ins_code_1
      Code Type = Py
      Begin Routine:
        m_ins_txt_1.alignText = 'left'
    TextComponent m_ins_header_1
      color = black
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Herzlich Willkommen zur Studie „Atme dich frei!“
      wrapWidth = 1.25
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    TextComponent m_ins_txt_1
      color = black
      letterHeight = 0.0325
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Vielen Dank für Deine Bereitschaft, an der Untersuchung teilzunehmen.

        Die Studie besteht aus insgesamt drei Blöcken zu je 20 Minuten.

        Zwischen den Blöcken gibt es jeweils eine 5-minütige Pause, in welcher Naturbilder präsentiert werden. Pro Block wird 4-mal ein Task zur verbalen und 4-mal ein Task zur figuralen Kreativität vorgegeben.
    KeyboardComponent m_ins_key_1
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent m_ins_btn_1
      fillColor = lightgrey
      lineColor = black
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent m_ins_hint_1
      color = darkgreen
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent m_ins_mse_1
      clickable = m_ins_btn_1
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine main_ins2
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    CodeComponent m_ins_code_2
      Code Type = Py
      Begin Routine:
        m_ins_txt_2.alignText = 'left'
    TextComponent m_ins_header_2
      color = black
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Herzlich Willkommen zur Studie „Atme dich frei!“
      wrapWidth = 1.25
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    TextComponent m_ins_txt_2
      color = black
      letterHeight = 0.0325
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Im ersten Block gibt es keine festgelegte Atemgeschwindigkeit.

        In den Blöcken 2 und 3 wird zu Beginn für zwei Minuten die Atemfrequenz durch einen Atemkreis vorgegeben, basierend auf den Rhythmen, die du bereits aus den Übungsvideos kennst.

        Wichtig: WÄHREND der Kreativitätstasks atmest du in der Geschwindigkeit, die für dich ANGENEHM ist. Zwischen den Tasks wird wieder für 1 Minute geatmet.
    KeyboardComponent m_ins_key_2
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent m_ins_btn_2
      fillColor = lightgrey
      lineColor = black
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent m_ins_hint_2
      color = darkgreen
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent m_ins_mse_2
      clickable = m_ins_btn_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine main_ins3
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    CodeComponent m_ins_code_3
      Code Type = Py
      Begin Routine:
        m_ins_txt_3.alignText = 'left'
    TextComponent m_ins_header_3
      color = black
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Herzlich Willkommen zur Studie „Atme dich frei!“
      wrapWidth = 1.25
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    TextComponent m_ins_txt_3
      color = black
      letterHeight = 0.0325
      pos = (0, main_pos_y)
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Es wird jeder Schritt im Laufe der Untersuchung noch einmal kurz erklärt.

        Falls es jetzt schon Fragen gibt, beantworte ich sie dir sehr gerne. Falls es keine Fragen gibt, drücke auf „Weiter“, um die Untersuchung zu starten.
    KeyboardComponent m_ins_key_3
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent m_ins_btn_3
      fillColor = lightgrey
      lineColor = black
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent m_ins_hint_3
      color = darkgreen
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent m_ins_mse_3
      clickable = m_ins_btn_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine main_ins
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    CodeComponent m_ins_code
      Code Type = Py
      Begin Routine:
        m_ins_txt.alignText = 'left'
    TextComponent m_ins_header
      color = black
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Herzlich Willkommen zur Studie „Atme dich kreativ!“
      wrapWidth = 1.25
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    TextComponent m_ins_txt
      color = black
      letterHeight = 0.0325
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text:
        Vielen Dank für Deine Bereitschaft, an dieser Untersuchung teilzunehmen. In dieser Studie untersuchen wir den Zusammenhang zwischen Alltagskreativität und der Herzratenvariabilität.

        Die Studie besteht aus insgesamt drei Blöcken zu je 20 Minuten. Zwischen den Blöcken gibt es jeweils eine 10-minütige Pause, in welcher zur Entspannung Naturbilder präsentiert werden. Pro Block wird 4-mal der Test zur verbalen und 4-mal der Test zur figuralen Kreativität vorgegeben.

        In Block 1 wird noch keine Atemgeschwindigkeit vorgegeben, in Block 2 und 3 werden jene Atemgeschwindigkeiten anhand eines Atemkreises vorgegeben, welche du bereits aus den Übungsvideos kennst.

        Wichtig: WÄHREND der Kreativitätstests atmest du in der Geschwindigkeit, DIE FÜR DICH PASSEND IST. Zwischen den Tests gibt es jeweils eine 1-minütige „Atemauffrischung“, in welcher wieder in der für den Block relevanten Geschwindigkeit geatmet wird.

        Es wird jeder Schritt im Laufe der Untersuchung noch einmal kurz erklärt. Falls es jetzt schon Fragen gibt, beantworte ich sie dir sehr gerne. Falls es keine Fragen gibt, drücke auf „Weiter“, um die Untersuchung zu starten.
    KeyboardComponent m_ins_key
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent m_ins_btn
      fillColor = lightgrey
      lineColor = black
      pos = (0, -.45)
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent m_ins_hint
      color = darkgreen
      letterHeight = 0.025
      pos = (0, -.45)
      startVal [time (s)] = 0.0
      text = Weiter
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    MouseComponent m_ins_mse
      clickable = m_ins_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine crea_items_count
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    CodeComponent cic_code
      Code Type = Py
      Begin Experiment:
        go_NB1min = 1
      Begin Routine:
        if crea_blocks.thisN < 7:
            go_NB1min = 1
        else:
            go_NB1min = 0
  Routine AUT_rating
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    CodeComponent AUTrating_code
      Code Type = Py
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      End Routine:
        ##  marker: AUTrating STOP  ##
        Marker.setData(57); core.wait(0.1); Marker.setData(0)
    TextComponent r_header_txt
      color = black
      letterHeight = 0.045
      pos = (0, header_pos_y)
      startVal [time (s)] = 0.0
      text = Wie kreativ findest Du Deine Antwort
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    SliderComponent VASrating
      color = black
      forceEndRoutine = False
      granularity = 0
      initVal = 5
      letterHeight = 0.7035
      pos = (0, main_pos_y)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      styles = ['slider']
      ticks = 0,1,2,3,4,5,6,7,8,9,10
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    KeyboardComponent r_end_key
      allowedKeys = 'w','return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent r1_mouse
      clickable = r1_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = VASrating.getMouseResponses() != None
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    TextComponent l_label
      color = blue
      letterHeight = 0.03
      pos = (-.5, main_pos_y - .075)
      startVal [time (s)] = 0.0
      text = gar nicht kreativ
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    TextComponent r_label
      color = blue
      letterHeight = 0.03
      pos = (.5, main_pos_y - .075)
      startVal [time (s)] = 0.0
      text = sehr kreativ
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    PolygonComponent r1_btn
      fillColor = $[1,1,1]
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.125, 0.0475)
      startVal [time (s)] = 0.0
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    TextComponent rating_hint
      color = black
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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  Routine TTCT_rating
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    TextComponent TTCT_r_header_txt
      color = black
      letterHeight = 0.045
      pos = (0, header_pos_y)
      startVal [time (s)] = 0.0
      text = Wie kreativ findest Du Deine Antwort
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    SliderComponent TTCT_VASrating
      color = black
      forceEndRoutine = False
      granularity = 0
      initVal = 5
      letterHeight = 0.7035
      pos = (0, main_pos_y)
      size = (1.0, 0.03)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = ['slider']
      ticks = 0,1,2,3,4,5,6,7,8,9,10
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    KeyboardComponent TTCT_r_end_key
      allowedKeys = 'w','return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent TTCT_r1_mse
      clickable = TTCT_r1_btn
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = TTCT_VASrating.getMouseResponses() != None
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    TextComponent TTCT_l_label
      color = blue
      letterHeight = 0.03
      pos = (-.5, main_pos_y - .075)
      startVal [time (s)] = 0.0
      text = gar nicht kreativ
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    TextComponent TTCT_r_label
      color = blue
      letterHeight = 0.03
      pos = (.5, main_pos_y - .075)
      startVal [time (s)] = 0.0
      text = sehr kreativ
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    PolygonComponent TTCT_r1_btn
      fillColor = $[1,1,1]
      pos = (0, btn_pos_y)
      shape = rectangle
      size = (0.125, 0.0475)
      startVal [time (s)] = 0.0
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    TextComponent TTCT_rating_hint
      color = black
      letterHeight = 0.025
      pos = (0, btn_pos_y)
      startVal [time (s)] = 0.0
      text = Weiter
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    CodeComponent TTCTrating_code
      Code Type = Py
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      End Routine:
        ##  marker: TTCTrating STOP  ##
        Marker.setData(65); core.wait(0.1); Marker.setData(0)
  Routine wait
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    CodeComponent wait_code
      Code Type = Py
      Begin Routine:
        if TTCTitem_presented:
            continueRoutine = False
Flow
  Routine _settings
  LoopInitiator main_ins_byp loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('slide', 'stim\\Instr\\Instr_X.JPG'), ('ins_dur', 999), ('ins_hint_txt', '„Weiter mit Leertaste“')]),
      OrderedDict([('slide', 'stim\\Instr\\Ablauf_neu.JPG'), ('ins_dur', 999), ('ins_hint_txt', '„Weiter mit Leertaste“')]),
      OrderedDict([('slide', 'stim\\Instr\\Start_Probe.JPG'), ('ins_dur', 5), ('ins_hint_txt', None)]),
      OrderedDict([('slide', 'stim\\Instr\\Trigger Info.JPG'), ('ins_dur', 999), ('ins_hint_txt', '„Weiter mit Leertaste“')])]
    LoopInitiator main_ins_orig loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 0
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      Routine main_ins
    LoopTerminator main_ins_orig
    Routine main_ins1
    Routine main_ins2
    Routine main_ins3
  LoopTerminator main_ins_byp
  LoopInitiator NB_ins_byp loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine NB_ins
  LoopTerminator NB_ins_byp
  LoopInitiator NB_byp loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    LoopInitiator NB_loop loopType="TrialHandler"
      loopType = random
      nReps = NB_trials
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      Routine go_NB3min
      Routine NB_3min
    LoopTerminator NB_loop
  LoopTerminator NB_byp
  LoopInitiator crea_tasks_byp loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine descCreaTasks
  LoopTerminator crea_tasks_byp
  LoopInitiator crea_blocks loopType="TrialHandler"
    conditionsFile = stim/crea_blocks.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('crea_block_4', 'AUT'), ('crea_block_2', 'AUT'), ('crea_block', 'AUT'), ('AUT_run', 1), ('TTCT_run', 0)]),
      OrderedDict([('crea_block_4', 'AUT'), ('crea_block_2', 'AUT'), ('crea_block', 'TTCT'), ('AUT_run', 0), ('TTCT_run', 1)]),
      OrderedDict([('crea_block_4', 'AUT'), ('crea_block_2', 'TTCT'), ('crea_block', 'AUT'), ('AUT_run', 1), ('TTCT_run', 0)]),
      OrderedDict([('crea_block_4', 'AUT'), ('crea_block_2', 'TTCT'), ('crea_block', 'TTCT'), ('AUT_run', 0), ('TTCT_run', 1)]),
      OrderedDict([('crea_block_4', 'TTCT'), ('crea_block_2', 'AUT'), ('crea_block', 'AUT'), ('AUT_run', 1), ('TTCT_run', 0)]),
      OrderedDict([('crea_block_4', 'TTCT'), ('crea_block_2', 'AUT'), ('crea_block', 'TTCT'), ('AUT_run', 0), ('TTCT_run', 1)]),
      OrderedDict([('crea_block_4', 'TTCT'), ('crea_block_2', 'TTCT'), ('crea_block', 'AUT'), ('AUT_run', 1), ('TTCT_run', 0)]),
      OrderedDict([('crea_block_4', 'TTCT'), ('crea_block_2', 'TTCT'), ('crea_block', 'TTCT'), ('AUT_run', 0), ('TTCT_run', 1)])]
    Routine crea_items_count
    LoopInitiator byp_AUTinfo loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 0
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      Routine AUT_info
    LoopTerminator byp_AUTinfo
    LoopInitiator AUT_trials loopType="TrialHandler"
      Selected rows = 0
      loopType = random
      nReps = AUT_run
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      conditions:
        [OrderedDict([('AUT_items', 'Gabel'), ('orig_collection', 'Gabel')]),
        OrderedDict([('AUT_items', 'Bananenschale'), ('orig_collection', 'Bananenschale')]),
        OrderedDict([('AUT_items', 'Tischtennisball'), ('orig_collection', 'Tischtennisball')]),
        OrderedDict([('AUT_items', 'Klopapier'), ('orig_collection', 'Klopapier')]),
        OrderedDict([('AUT_items', 'Stirnband'), ('orig_collection', 'Stirnband')]),
        OrderedDict([('AUT_items', 'Socke'), ('orig_collection', 'Socke')]),
        OrderedDict([('AUT_items', 'Blumenvase'), ('orig_collection', 'Blumenvase')]),
        OrderedDict([('AUT_items', 'Lampe'), ('orig_collection', 'Lampe')]),
        OrderedDict([('AUT_items', 'Hufeisen'), ('orig_collection', 'Hufeisen')]),
        OrderedDict([('AUT_items', 'Knetmasse'), ('orig_collection', 'Knetmasse')]),
        OrderedDict([('AUT_items', 'Konservendose'), ('orig_collection', 'Konservendose')]),
        OrderedDict([('AUT_items', 'Zahnbürste'), ('orig_collection', 'Zahnbürste (Zahnburste/Zahnbuerste)')]),
        OrderedDict([('AUT_items', 'Bügeleisen'), ('orig_collection', 'Bügeleisen')]),
        OrderedDict([('AUT_items', 'Pflaster'), ('orig_collection', 'Pflaster')]),
        OrderedDict([('AUT_items', 'Kleiderhaken'), ('orig_collection', 'Kleiderhaken')]),
        OrderedDict([('AUT_items', 'Autoreifen'), ('orig_collection', 'Autoreifen')]),
        OrderedDict([('AUT_items', 'Spiegel'), ('orig_collection', 'Spiegel')]),
        OrderedDict([('AUT_items', 'Schaumstoffpolster'), ('orig_collection', 'Schaumstoffpolster')]),
        OrderedDict([('AUT_items', 'Reisekoffer'), ('orig_collection', 'Reisekoffer')])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
      LoopInitiator AUTitem_loop loopType="TrialHandler"
        loopType = random
        nReps = 1
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        conditions:
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        Routine AUTtrial
        Routine t_AUTanswer
        Routine AUT_rating
      LoopTerminator AUTitem_loop
    LoopTerminator AUT_trials
    LoopInitiator TTCT_trials loopType="TrialHandler"
      Selected rows = 1
      loopType = random
      nReps = TTCT_run
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      conditions:
        [OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild01sw.jpg'), ('stim_draft', 'B01_draft.jpg'), ('stim_elab', 'B01_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild02sw.jpg'), ('stim_draft', 'B02_draft.jpg'), ('stim_elab', 'B02_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild03sw.jpg'), ('stim_draft', 'B03_draft.jpg'), ('stim_elab', 'B03_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild04sw.jpg'), ('stim_draft', 'B04_draft.jpg'), ('stim_elab', 'B04_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild05sw.jpg'), ('stim_draft', 'B05_draft.jpg'), ('stim_elab', 'B05_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild06sw.jpg'), ('stim_draft', 'B06_draft.jpg'), ('stim_elab', 'B06_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild07sw.jpg'), ('stim_draft', 'B07_draft.jpg'), ('stim_elab', 'B07_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild08sw.jpg'), ('stim_draft', 'B08_draft.jpg'), ('stim_elab', 'B08_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild09sw.jpg'), ('stim_draft', 'B09_draft.jpg'), ('stim_elab', 'B09_elab.jpg')]),
        OrderedDict([('set', 1), ('TTCT_stim', 'stim\\TTCT_stimuli\\Bild10sw.jpg'), ('stim_draft', 'B10_draft.jpg'), ('stim_elab', 'B10_elab.jpg')])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
      Routine b2TTCTonline
      Routine wait
      Routine TTCT_rating
    LoopTerminator TTCT_trials
    LoopInitiator NB1min_loop loopType="TrialHandler"
      loopType = sequential
      nReps = go_NB1min
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      Routine NB_1min
    LoopTerminator NB1min_loop
  LoopTerminator crea_blocks
  LoopInitiator thx_byp loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = disp_thx
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    Routine thx
  LoopTerminator thx_byp
